;spin-echo 2D with presaturation
; 
;generating dephasing signals
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"d11=30m"

1 ze
2 d11 pl9:f1
3 d1 cw:f1 ph29
  4u do:f1
  4u pl1:f1
4 p1 ph1
  vd*0.5
  p2 ph2
  vd*0.5
  go=2 ph31
  d11 wr #0 if #0 ivd
  lo to 1 times td1
exit

ph1=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph2=0 2 1 3 1 3 2 0 1 3 2 0 2 0 3 1
ph29 = 0 2
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;pl9 : f1 channel - presaturation cw pulse power 
;d1 : relaxation delay; 1-5 * T1
;td: number of points in F2 - 32768
;td1 : number of points in F1 - 5
;FnMode : acquisition mode - QF
;vdlist : create a vdlist with values ---> 3u, 10m, 30m, 50m, 90m
;ns: 4 * n


;$Id: spin_echo_2d_pr, v 1.0 2024/06/12
